---
API: 3
OpenSesame: 4.1.14
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title "Go No-Go Task (SART)"
set subject_parity even
set subject_nr 0
set start task
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set height 1200
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 20
set font_italic False
set font_family mono
set font_bold False
set experiment_path "G:\\Meu Drive\\OpenSesame\\Meus Testes"
set disable_garbage_collection False
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set bidi no
set background white

define sequence Block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions_Training_Condition True
	run Trial_Loop_Training_Condition_Phase True

define sequence Block_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions_Task_Condition True
	run Trial_Loop_Task_Phase True

define form_text_display End_of_Task
	set timeout infinite
	set spacing 10
	set rows "1;8;1"
	set only_render no
	set ok_text Finalizar
	set margins "40;40;40;40"
	set form_title "<span size=24><b>Teste Concluído</b></span>"
	__form_text__
	<b>Parabéns, você chegou ao fim da tarefa!</b>
	
	Todos os seus dados e tempos de reação foram gravados com sucesso pelo sistema. 
	
	Muito obrigado pela sua atenção, foco e participação.
	
	Clique no botão abaixo para encerrar o aplicativo de testes.
	__end__
	set description "A simple text display form"
	set cols "1;2;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display End_of_Training
	set timeout infinite
	set spacing 10
	set rows "1;14;1"
	set only_render no
	set ok_text "Iniciar Intervalo"
	set margins "30;40;30;40"
	set form_title "<span size=24><b>Fim do Treino</b></span>"
	__form_text__
	<b>O treino terminou com sucesso!</b>
	
	O teste real começará em breve e as regras são exatamente as mesmas:
	
	• <b>Números normais:</b> CLIQUE com o BOTÃO ESQUERDO do mouse o mais rápido possível.
	
	• <b>Número 3:</b> NÃO CLIQUE com o mouse (segure o impulso).
	
	Lembre-se de que o cursor do mouse <b>continuará sem aparecer na tela</b>, mas você pode clicar em qualquer lugar com o BOTÃO ESQUERDO do mouse.
	
	Antes de começar, você terá <b>30 segundos de intervalo</b> para descansar os olhos. Clique abaixo para iniciar o descanso.
	__end__
	set description "A simple text display form"
	set cols "1;2;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Instructions
	set timeout infinite
	set spacing 10
	set rows "1;8;1"
	set only_render no
	set ok_text "Iniciar Treino"
	set margins "40;40;40;40"
	set form_title "<span size=24><b>Instruções Gerais</b></span>"
	__form_text__
	<b>Tarefa de Atenção Sustentada (SART)</b>
	
	Nesta tarefa, números de <b>1 a 9</b> vão piscar um por um no centro da tela. 
	Seu objetivo é responder o mais rápido possível, seguindo apenas duas regras:
	
	• <b>Se aparecer 1, 2, 4, 5, 6, 7, 8 ou 9:</b> CLIQUE com o BOTÃO ESQUERDO do mouse o mais rápido que puder.
	
	• <b>Se aparecer o número 3:</b> NÃO CLIQUE com o mouse. Segure o impulso e espere o número sumir.
	
	O cursor do mouse <b>não aparecerá na tela</b>, mas você pode clicar em qualquer lugar com o BOTÃO ESQUERDO do mouse. Tente ser rápido e preciso! Começaremos agora com um breve <b>TREINO</b>.
	__end__
	set description "A simple text display form"
	set cols "1;2;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad Instructions_Task_Condition
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=True text="O teste começará em breve. Prepare-se!" x=0 y=0 z_index=0

define sketchpad Instructions_Training_Condition
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Faremos um breve treinamento. Aguarde!<br />" x=0 y=0 z_index=0

define sketchpad Pause_1
	set duration 30000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=True text="Aguarde o Início do Teste!" x=0 y=0 z_index=0

define loop Task_Loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 practice no
	setcycle 0 condition "[condition1]"
	run Block_sequence_1

define loop Task_Loop_with_Pause
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 Experimental_Loop_PLUS_Pause ""
	run Task_PLUS_Pause_Sequence

define sequence Task_PLUS_Pause_Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Pause_1 always
	run Task_Loop always
	run End_of_Task always

define loop Training_Loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 practice yes
	setcycle 0 condition "[condition1]"
	run Block_sequence

define loop Trial_Loop_Task_Phase
	set source_file ""
	set source table
	set repeat 15
	set order random
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 number 1
	setcycle 0 correct_response left_button
	setcycle 0 condition go
	setcycle 1 number 2
	setcycle 1 correct_response left_button
	setcycle 1 condition go
	setcycle 2 number 3
	setcycle 2 correct_response timeout
	setcycle 2 condition nogo
	setcycle 3 number 4
	setcycle 3 correct_response left_button
	setcycle 3 condition go
	setcycle 4 number 5
	setcycle 4 correct_response left_button
	setcycle 4 condition go
	setcycle 5 number 6
	setcycle 5 correct_response left_button
	setcycle 5 condition go
	setcycle 6 number 7
	setcycle 6 correct_response left_button
	setcycle 6 condition go
	setcycle 7 number 8
	setcycle 7 correct_response left_button
	setcycle 7 condition go
	setcycle 8 number 9
	setcycle 8 correct_response left_button
	setcycle 8 condition go
	run Trial_sequence_Task

define loop Trial_Loop_Training_Condition_Phase
	set source_file ""
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 number 1
	setcycle 0 correct_response left_button
	setcycle 0 condition go
	setcycle 1 number 2
	setcycle 1 correct_response left_button
	setcycle 1 condition go
	setcycle 2 number 3
	setcycle 2 correct_response timeout
	setcycle 2 condition nogo
	setcycle 3 number 4
	setcycle 3 correct_response left_button
	setcycle 3 condition go
	setcycle 4 number 5
	setcycle 4 correct_response left_button
	setcycle 4 condition go
	setcycle 5 number 6
	setcycle 5 correct_response left_button
	setcycle 5 condition go
	setcycle 6 number 7
	setcycle 6 correct_response left_button
	setcycle 6 condition go
	setcycle 7 number 8
	setcycle 7 correct_response left_button
	setcycle 7 condition go
	setcycle 8 number 9
	setcycle 8 correct_response left_button
	setcycle 8 condition go
	run Trial_sequence_Training

define sequence Trial_sequence_Task
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run jitter_task_js True
	run mask_task_sketchpad True
	run Trial_sequence_Task_sketchpad True
	run Trial_sequence_Task_mouse_response True
	run artefact_filter_Task_inline_javascript True
	run Trial_sequence_Task_logger True

define logger Trial_sequence_Task_logger
	set description "Logs experimental data"
	set auto_log yes

define mouse_response Trial_sequence_Task_mouse_response
	set timeout 1150
	set show_cursor no
	set linked_sketchpad ""
	set flush no
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set allowed_responses left_button

define sketchpad Trial_sequence_Task_sketchpad
	set duration 250
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=150 html=yes show_if=True text="[number]" x=0 y=0 z_index=0

define sequence Trial_sequence_Training
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run jitter_training_js True
	run mask_training_sketchpad True
	run Trial_sequence_training_sketchpad True
	run Trial_sequence_training_mouse_response True
	run artefact_filter_training_inline_javascript True
	run Trial_sequence_training_logger True

define logger Trial_sequence_training_logger
	set description "Logs experimental data"
	set auto_log yes

define mouse_response Trial_sequence_training_mouse_response
	set timeout 1150
	set show_cursor no
	set linked_sketchpad ""
	set flush no
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set allowed_responses left_button

define sketchpad Trial_sequence_training_sketchpad
	set duration 250
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=150 html=yes show_if=True text="[number]" x=0 y=0 z_index=0

define inline_javascript artefact_filter_Task_inline_javascript
	set description "Executes JavaScript"
	___run__
	// --- FILTRO DE ARTEFATOS E CORREÇÃO SART ---
	var LIMITE_MINIMO_MS = 100;
	
	// 1. Tratamento de Artefatos (RTs antecipatórios)
	if (vars.response_time !== undefined && vars.response_time !== null) {
	    if (vars.response_time < LIMITE_MINIMO_MS) {
	        vars.is_artifact = 1; 
	        
	        // A CORREÇÃO CRÍTICA AQUI:
	        // Se foi rápido demais, anula o acerto para não sujar sua média de RT
	        vars.correct = 0; 
	    } else {
	        vars.is_artifact = 0; 
	    }
	} else {
	    vars.is_artifact = 0; 
	}
	
	// 2. Tratamento do No-Go (Acerto por abstenção)
	if (vars.condition === 'nogo') {
	    // Se ele NÃO clicou, o response vem como 'None', null ou 'timeout'
	    if (vars.response === 'None' || vars.response === null || vars.response === 'timeout' || vars.response === '') {
	        vars.correct = 1; // Salva a Pátria: Ele segurou o clique, logo, acertou!
	    } else {
	        vars.correct = 0; // Se tem qualquer outro valor, ele clicou. É erro (Comissão).
	    }
	}
	__end__
	set _prepare ""

define inline_javascript artefact_filter_training_inline_javascript
	set description "Executes JavaScript"
	___run__
	// --- FILTRO DE ARTEFATOS E CORREÇÃO SART ---
	var LIMITE_MINIMO_MS = 100;
	
	// 1. Tratamento de Artefatos (RTs antecipatórios)
	if (vars.response_time !== undefined && vars.response_time !== null) {
	    if (vars.response_time < LIMITE_MINIMO_MS) {
	        vars.is_artifact = 1; 
	        
	        // A CORREÇÃO CRÍTICA AQUI:
	        // Se foi rápido demais, anula o acerto para não sujar sua média de RT
	        vars.correct = 0; 
	    } else {
	        vars.is_artifact = 0; 
	    }
	} else {
	    vars.is_artifact = 0; 
	}
	
	// 2. Tratamento do No-Go (Acerto por abstenção)
	if (vars.condition === 'nogo') {
	    // Se ele NÃO clicou, o response vem como 'None', null ou 'timeout'
	    if (vars.response === 'None' || vars.response === null || vars.response === 'timeout' || vars.response === '') {
	        vars.correct = 1; // Salva a Pátria: Ele segurou o clique, logo, acertou!
	    } else {
	        vars.correct = 0; // Se tem qualquer outro valor, ele clicou. É erro (Comissão).
	    }
	}
	__end__
	set _prepare ""

define inline_javascript jitter_task_js
	set description "Executes JavaScript"
	set _run ""
	___prepare__
	// Gera um intervalo temporal aleatório entre 800ms e 1500ms
	vars.jitter = Math.floor(Math.random() * (1500 - 800 + 1)) + 800;
	__end__

define inline_javascript jitter_training_js
	set description "Executes JavaScript"
	set _run ""
	___prepare__
	// Gera um intervalo temporal aleatório entre 800ms e 1500ms
	vars.jitter = Math.floor(Math.random() * (1500 - 800 + 1)) + 800;
	__end__

define sketchpad mask_task_sketchpad
	set duration "[jitter]"
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=True text="+" x=0 y=0 z_index=0

define sketchpad mask_training_sketchpad
	set duration "[jitter]"
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=90 html=yes show_if=True text="+" x=0 y=0 z_index=0

define inline_javascript new_inline_javascript
	set description "Executes JavaScript"
	set _run ""
	___prepare__
	// Altere para control para testar a fase Go
	vars.condition = "control";
	__end__

define sequence task
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_javascript True
	run Instructions always
	run Training_Loop always
	run End_of_Training always
	run Task_Loop_with_Pause always

